PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  expName = con_exp
  keyboardBackend = ioHub
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Routines
  Routine instr_1
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    TextComponent text_instr_1
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Сейчас Вы увидите серию картинок с подписями к ним, после каждой картинки Вам нужно будет ответить на вопрос относительно этого персонажа (картинки с подписью). Сам вопрос Вы увидите ДО картинки.
        Отвечайте на вопросы в формате “да/нет” с помощью клавиатуры:
        стрелочка вправо (—>) – ответ “да”, а стрелочка влево (<—) – ответ “нет”. Экран для ответа появится после завершения показа картинки.

        Если инструкция понятна, нажмите клавишу “пробел”
    KeyboardComponent key_resp_instr_1
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.5
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  Routine quest_1
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    TextComponent text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $QuestionText
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    TextComponent text_2
      letterHeight = 0.05
      pos = (0, -0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Чтобы перейти к картинке, нажмите клавишу "пробел"
      units = height
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.5
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  Routine pic_1
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    ImageComponent image_1
      image [set every repeat] = $ImageFile
      saveStartStop = False
      size = (None, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
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    TextComponent text_label_1
      letterHeight = 0.05
      pos = (0, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
      text [set every repeat] = $LabelText
      units = height
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  Routine ans_quest_1
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    TextComponent text_ans_quest_right
      letterHeight = 0.04
      pos = (0.3, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = стрелка вправо - ответ "да"
      units = height
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    TextComponent text_ans_quest_left
      letterHeight = 0.04
      pos = (-0.3, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = стрелка влево - ответ "нет"
      units = height
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    KeyboardComponent key_resp_ans_quest_1
      allowedKeys [set every repeat] = 'left','right'
      correctAns = $CorrectAnswer_congr
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine instr_2
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    TextComponent text_3
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Теперь Вам будут показаны картинки с подписями, часть которых встречалась Вам ранее, а другая часть является новой. Ваша задача – определить, был ли вам показан именно такой персонаж (картинка с подписью) ранее.

        Если такой персонаж был на предыдущем этапе эксперимента, нажимайте стрелочку вправо (—>), если персонажа не было и он новый – стрелочку влево (<—)

        Если инструкция понятна, нажмите клавишу “пробел”
    KeyboardComponent key_resp_instr_2
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine pic2
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    ImageComponent image_2
      image [set every repeat] = $ImageFile_All_list
      saveStartStop = False
      size = (None, 0.4)
      startVal [time (s)] = 0.0
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    TextComponent text_label_2
      letterHeight = 0.05
      pos = (0, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $LabelText_all
      units = height
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    KeyboardComponent key_resp_recognition
      allowedKeys [set every repeat] = 'left','right'
      correctAns = @True_Ans_all
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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    TextComponent text_instr_3
      letterHeight = 0.02
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = height
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      text:
        стрелка вправо - персонаж был
        стрелка влево - не было
  Routine final_text
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    TextComponent text_fin
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text = Большое спасибо за то, что согласились принять участие в исследовании и уделили ему время! Дождитесь, пожалуйста: данное окно закроется автоматически!
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Flow
  Routine instr_1
  LoopInitiator loop_1_block loopType="TrialHandler"
    conditionsFile = con_stim.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'ImageFile': 'img1.png', 'LabelText': 'арбузоро-гепардоро', 'QuestionType': 'Перцептивный', 'QuestionText': 'Слово написано большими буквами?', 'CorrectAnswer_congr': 'left'},
      {'ImageFile': 'img2.png', 'LabelText': 'БАНАНОРО-ФАЗАНОРО', 'QuestionType': 'Фонологический', 'QuestionText': 'Слово рифмуется с "облакоро"?', 'CorrectAnswer_congr': 'right'},
      {'ImageFile': 'img3.png', 'LabelText': 'барахлоро-коалоро', 'QuestionType': 'Самоотнесенный', 'QuestionText': 'Ассоциируете ли Вы себя с этим словом?', 'CorrectAnswer_congr': 'right'},
      {'ImageFile': 'img4.png', 'LabelText': 'ДИВАНИТТО-ТЮЛЕНИТТО', 'QuestionType': 'Перцептивный', 'QuestionText': 'Слово написано большими буквами?', 'CorrectAnswer_congr': 'right'},
      {'ImageFile': 'img5.png', 'LabelText': 'журналетто-кабанетто', 'QuestionType': 'Фонологический', 'QuestionText': 'Слово рифмуется с "пейзажини"?', 'CorrectAnswer_congr': 'left'},
      {'ImageFile': 'img6.png', 'LabelText': 'КАРТОШЕЛЛО-КУКУШЕЛЛО', 'QuestionType': 'Самоотнесенный', 'QuestionText': 'Ассоциируете ли Вы себя с этим словом?', 'CorrectAnswer_congr': 'right'},
      {'ImageFile': 'img7.png', 'LabelText': 'кирпичони-саранчони', 'QuestionType': 'Перцептивный', 'QuestionText': 'Слово написано большими буквами?', 'CorrectAnswer_congr': 'left'},
      {'ImageFile': 'img8.png', 'LabelText': 'КЛУБНИЧИТТО-ХОМЯЧИТТО', 'QuestionType': 'Фонологический', 'QuestionText': 'Слово рифмуется с  "ветеритто"?', 'CorrectAnswer_congr': 'right'}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
    Routine quest_1
    Routine pic_1
    Routine ans_quest_1
  LoopTerminator loop_1_block
  Routine instr_2
  LoopInitiator loop_2_block loopType="TrialHandler"
    conditionsFile = all_congr_stim_list.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'ImageFile_All_list': 'img1.png', 'LabelText_all': 'арбузоро-гепардоро', 'True_Ans_all': 'right'},
      {'ImageFile_All_list': 'img2.png', 'LabelText_all': 'БАНАНОРО-ФАЗАНОРО', 'True_Ans_all': 'right'},
      {'ImageFile_All_list': 'img3.png', 'LabelText_all': 'барахлоро-коалоро', 'True_Ans_all': 'right'},
      {'ImageFile_All_list': 'img4.png', 'LabelText_all': 'ДИВАНИТТО-ТЮЛЕНИТТО', 'True_Ans_all': 'right'},
      {'ImageFile_All_list': 'img5.png', 'LabelText_all': 'журналетто-кабанетто', 'True_Ans_all': 'right'},
      {'ImageFile_All_list': 'img6.png', 'LabelText_all': 'КАРТОШЕЛЛО-КУКУШЕЛЛО', 'True_Ans_all': 'right'},
      {'ImageFile_All_list': 'img7.png', 'LabelText_all': 'кирпичони-саранчони', 'True_Ans_all': 'right'},
      {'ImageFile_All_list': 'img8.png', 'LabelText_all': 'КЛУБНИЧИТТО-ХОМЯЧИТТО', 'True_Ans_all': 'right'},
      {'ImageFile_All_list': 'img9.png', 'LabelText_all': 'кокосело-медузело', 'True_Ans_all': 'right'},
      {'ImageFile_All_list': 'img10.png', 'LabelText_all': 'КУВШИНО-ЛОШАДИНО', 'True_Ans_all': 'right'},
      {'ImageFile_All_list': 'img11.png', 'LabelText_all': 'лавашетто-лягушето', 'True_Ans_all': 'right'},
      {'ImageFile_All_list': 'img12.png', 'LabelText_all': 'ЛАНДЫШЕЛЛО-МАРТЫШЕЛЛО', 'True_Ans_all': 'right'},
      {'ImageFile_All_list': 'img13.png', 'LabelText_all': 'мандарино-пингвинино', 'True_Ans_all': 'right'},
      {'ImageFile_All_list': 'img14.png', 'LabelText_all': 'МОНИТОРО-КАМБАЛОРО', 'True_Ans_all': 'right'},
      {'ImageFile_All_list': 'img15.png', 'LabelText_all': 'огурцони-акулони', 'True_Ans_all': 'right'}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
    Routine pic2
  LoopTerminator loop_2_block
  Routine final_text
