PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Use version = 2024.2.4
  Window size (pixels) = [1470, 956]
  expName = popitka2
  keyboardBackend = Pyglet
  runMode = 1
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Routines
  Routine instr_1
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    TextComponent text_instr_1
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Сейчас Вы увидите серию картинок с подписями к ним, после каждой картинки Вам нужно будет ответить на вопрос относительно этого персонажа (картинки с подписью). Сам вопрос Вы увидите ДО картинки.
        Отвечайте на вопросы в формате “да/нет” с помощью клавиатуры:
        стрелочка вправо (—>) – ответ “да”, а стрелочка влево (<—) – ответ “нет”. Экран для ответа появится после завершения показа картинки.

        Если инструкция понятна, нажмите клавишу “пробел”
    KeyboardComponent key_resp_instr_1
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.52
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  Routine quest_1
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    TextComponent text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $QuestionText
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    TextComponent text_2
      letterHeight = 0.05
      pos = (0, -0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Чтобы перейти к картинке, нажмите клавишу "пробел"
      units = height
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.5
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  Routine pic_1
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    ImageComponent image_1
      image [set every repeat] = $ImageFile
      saveStartStop = False
      size = (None, 0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
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    TextComponent text_label_1
      letterHeight = 0.05
      pos = (0, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
      text [set every repeat] = $LabelText
      units = height
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  Routine ans_quest_1
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    TextComponent text_ans_quest_right
      letterHeight = 0.04
      pos = (0.3, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = стрелка вправо - ответ "да"
      units = height
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    TextComponent text_ans_quest_left
      letterHeight = 0.04
      pos = (-0.3, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = стрелка влево - ответ "нет"
      units = height
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    KeyboardComponent key_resp_ans_quest_1
      allowedKeys [set every repeat] = 'left','right'
      correctAns = $CorrectAnswer_congr
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      storeCorrect = True
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  Routine instr_2
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    TextComponent text_3
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Теперь Вам будут показаны картинки с подписями, часть которых встречалась Вам ранее, а другая часть является новой. Ваша задача – определить, был ли вам показан именно такой персонаж (картинка с подписью) ранее.

        Если такой персонаж был на предыдущем этапе эксперимента, нажимайте стрелочку вправо (—>), если персонажа не было и он новый – стрелочку влево (<—)

        Если инструкция понятна, нажмите клавишу “пробел”
    KeyboardComponent key_resp_instr_2
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine pic2
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    ImageComponent image_2
      image [set every repeat] = $ImageFile_All_list
      saveStartStop = False
      size = (None, 0.4)
      startVal [time (s)] = 0.0
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    TextComponent text_label_2
      letterHeight = 0.05
      pos = (0, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $LabelText_all
      units = height
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    KeyboardComponent key_resp_recognition
      allowedKeys [set every repeat] = 'left','right'
      correctAns = $True_Ans_all
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      storeCorrect = True
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    TextComponent text_instr_3
      letterHeight = 0.02
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = height
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      text:
        стрелка вправо - персонаж был
        стрелка влево - не было
  Routine final_text
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    TextComponent text_fin
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text = Большое спасибо за то, что согласились принять участие в исследовании и уделили ему время! Дождитесь, пожалуйста, окончания загрузки данных: данное окно закроется автоматически!
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  Routine demo_sex
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    TextComponent text_demo_1
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Добрый день!
        Спасибо, что согласились принять участие в исследовании!
        Пожалуйста, отметьте Ваш пол ниже
    SliderComponent slider
      forceEndRoutine = True
      granularity = 0
      labels = ('Женский', 'Мужской', 'Не хочу указывать')
      letterHeight = 0.025
      pos = (0, -0.3)
      size = (0.5, 0.05)
      startVal [time (s)] = 0.0
      styles = radio
      ticks = (1, 2, 3, 4, 5)
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  Routine demo_age
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    TextComponent text_demo_age
      letterHeight = 0.05
      pos = (0, 0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Пожалуйста, введите Ваш возраст числом (например, 31)
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    TextboxComponent textbox
      bold = False
      borderWidth = 1
      color = -1.0000, -1.0000, -1.0000
      editable = True
      fillColor = 0.0000, 0.0000, 0.0000
      letterHeight = 0.03
      placeholder = Ввести возраст
      pos = (0, -0.2)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    TextComponent text_age_space
      letterHeight = 0.05
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Нажмите "пробел" после ввода возраста числом, чтобы продолжить
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    KeyboardComponent key_resp_age
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.5
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  Routine demo_meme
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    TextComponent text_meme
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Знакомы ли Вам мемы в стиле "итальянский брейнрот"? (например, "бомбардиро крокодило" или "тралалело тралала")
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    SliderComponent slider_meme
      forceEndRoutine = True
      granularity = 0
      labels = ('Да', 'Нет', 'Не уверен/а')
      letterHeight = 0.05
      pos = (0, -0.25)
      size = (0.5, 0.05)
      startVal [time (s)] = 0.0
      styles = radio
      ticks = (1, 2, 3, 4, 5)
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Flow
  Routine demo_sex
  Routine demo_age
  Routine instr_1
  LoopInitiator loop_1_block loopType="TrialHandler"
    conditionsFile = incon_stim.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'ImageFile': 'img1.png', 'LabelText': 'валичино-саличино', 'QuestionType': 'Перцептивный', 'QuestionText': 'Слово написано большими буквами?', 'CorrectAnswer_congr': 'left'},
      {'ImageFile': 'img2.png', 'LabelText': 'ПАЛЕВИНО-ТАЛЕВИНО', 'QuestionType': 'Фонологический', 'QuestionText': 'Слово рифмуется с "облакино"?', 'CorrectAnswer_congr': 'right'},
      {'ImageFile': 'img3.png', 'LabelText': 'бенедетто-фенедетто', 'QuestionType': 'Самоотнесенный', 'QuestionText': 'Ассоциируете ли Вы себя с этим словом?', 'CorrectAnswer_congr': 'right'},
      {'ImageFile': 'img4.png', 'LabelText': 'СИЛЬВЕСТЕТТО-ДИЛЬВЕСТЕТТО', 'QuestionType': 'Перцептивный', 'QuestionText': 'Слово написано большими буквами?', 'CorrectAnswer_congr': 'right'},
      {'ImageFile': 'img5.png', 'LabelText': 'ралентелло-палентелло', 'QuestionType': 'Фонологический', 'QuestionText': 'Слово рифмуется с "пейзажини"?', 'CorrectAnswer_congr': 'left'},
      {'ImageFile': 'img6.png', 'LabelText': 'КАРОФЕЛЛО-МАРОФЕЛЛО', 'QuestionType': 'Самоотнесенный', 'QuestionText': 'Ассоциируете ли Вы себя с этим словом?', 'CorrectAnswer_congr': 'right'},
      {'ImageFile': 'img7.png', 'LabelText': 'марилитто-сарилитто', 'QuestionType': 'Перцептивный', 'QuestionText': 'Слово написано большими буквами?', 'CorrectAnswer_congr': 'left'},
      {'ImageFile': 'img8.png', 'LabelText': 'ТАРЕМАТТО-КАРЕМАТТО', 'QuestionType': 'Фонологический', 'QuestionText': 'Слово рифмуется с  "ветератто"?', 'CorrectAnswer_congr': 'right'}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
    Routine quest_1
    Routine pic_1
    Routine ans_quest_1
  LoopTerminator loop_1_block
  Routine instr_2
  LoopInitiator loop_2_blocks loopType="TrialHandler"
    conditionsFile = /Users/ashevelyova/Downloads/inc_brainrotexp/all_incongr_stim_list.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'ImageFile_All_list': 'img1.png', 'LabelText_all': 'валичино-саличино', 'True_Ans_all': 'right'},
      {'ImageFile_All_list': 'img2.png', 'LabelText_all': 'ПАЛЕВИНО-ТАЛЕВИНО', 'True_Ans_all': 'right'},
      {'ImageFile_All_list': 'img3.png', 'LabelText_all': 'бенедетто-фенедетто', 'True_Ans_all': 'right'},
      {'ImageFile_All_list': 'img4.png', 'LabelText_all': 'СИЛЬВЕСТЕТТО-ДИЛЬВЕСТЕТТО', 'True_Ans_all': 'right'},
      {'ImageFile_All_list': 'img5.png', 'LabelText_all': 'ралентелло-палентелло', 'True_Ans_all': 'right'},
      {'ImageFile_All_list': 'img6.png', 'LabelText_all': 'КАРОФЕЛЛО-МАРОФЕЛЛО', 'True_Ans_all': 'right'},
      {'ImageFile_All_list': 'img7.png', 'LabelText_all': 'марилитто-сарилитто', 'True_Ans_all': 'right'},
      {'ImageFile_All_list': 'img8.png', 'LabelText_all': 'ТАРЕМАТТО-КАРЕМАТТО', 'True_Ans_all': 'right'},
      {'ImageFile_All_list': 'img9.png', 'LabelText_all': 'маривоне-саривоне', 'True_Ans_all': 'right'},
      {'ImageFile_All_list': 'img10.png', 'LabelText_all': 'ТАЛЕРОНЕ-КАРЕЛОНЕ', 'True_Ans_all': 'right'},
      {'ImageFile_All_list': 'img11.png', 'LabelText_all': 'таривора-каривора', 'True_Ans_all': 'right'},
      {'ImageFile_All_list': 'img12.png', 'LabelText_all': 'МАЛИВОРА-БАЛИВОРА', 'True_Ans_all': 'right'},
      {'ImageFile_All_list': 'img13.png', 'LabelText_all': 'миралино-киралино', 'True_Ans_all': 'right'},
      {'ImageFile_All_list': 'img14.png', 'LabelText_all': 'БЕРЕНДИНО-ФЕРЕНДИНО', 'True_Ans_all': 'right'},
      {'ImageFile_All_list': 'img15.png', 'LabelText_all': 'кареттето-мареттето', 'True_Ans_all': 'right'}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
    Routine pic2
  LoopTerminator loop_2_blocks
  Routine demo_meme
  Routine final_text
